<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.TimestampGeneratorGen3;assembly=Harp.TimestampGeneratorGen3"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ClockSynchronizerEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:FilterMessageType">
          <harp:FilterType>Include</harp:FilterType>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="harp:TimestampSeconds" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Heartbeats</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ClockSynchronizerEvents</Name>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:TimestampedTimer" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Timebase</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
