<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:UclOpen.Streaming;assembly=UclOpen.Streaming"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Streaming:StreamController.bonsai">
        <RigId>MyRig</RigId>
        <SubjectId>Algernon</SubjectId>
        <SessionId>001</SessionId>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0.5S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>42</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Streaming:PackDataMessage.bonsai">
        <StreamName>data/first</StreamName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT1S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="DoubleProperty">
          <Value>142</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Streaming:PackDataMessage.bonsai">
        <StreamName>data/second</StreamName>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.5S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Streaming:PackDataMessage.bonsai">
        <StreamName>timer</StreamName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Streaming:ReceiveStream.bonsai">
        <RigId>MyRig</RigId>
        <StreamName>data</StreamName>
        <ConnectionString>&gt;tcp://127.0.0.1:5556</ConnectionString>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Topic</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>MyRig/data/first/</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="p1:UnpackDataMessage">
        <p1:Type xsi:type="TypeMapping" TypeArguments="sys:Int32" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Topic</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>MyRig/data/second/</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="p1:UnpackDataMessage">
        <p1:Type xsi:type="TypeMapping" TypeArguments="sys:Double" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Streaming:ReceiveStream.bonsai">
        <RigId>MyRig</RigId>
        <StreamName>timer</StreamName>
        <ConnectionString>&gt;tcp://127.0.0.1:5556</ConnectionString>
      </Expression>
      <Expression xsi:type="p1:UnpackDataMessage">
        <p1:Type xsi:type="TypeMapping" TypeArguments="sys:Int64" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Streaming:PackVideoMessage.bonsai">
        <SampleInterval>PT0.2S</SampleInterval>
        <FrameSize>
          <Width>320</Width>
          <Height>240</Height>
        </FrameSize>
        <Interpolation>Linear</Interpolation>
        <StreamName>video</StreamName>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Streaming:ReceiveStream.bonsai">
        <RigId>MyRig</RigId>
        <StreamName>video</StreamName>
        <ConnectionString>&gt;tcp://127.0.0.1:5556</ConnectionString>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Streaming:UnpackVideoMessage.bonsai">
        <Mode>Unchanged</Mode>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="14" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>