<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Lower" DisplayName="Minimum" Category="TogglePeriod" />
        <Property Name="Upper" DisplayName="Maximum" Category="TogglePeriod" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>RandomInterval</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>RngSeed</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" />
              <Property Name="Upper" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>2</p1:Lower>
                <p1:Upper>6</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT5.038S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>