<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputClearPayload">
          <beh:OutputClear>DO0 DO1 DO2</beh:OutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="BehaviorCommandsSubjectName" Description="The name of the input &quot;commands&quot; Subject" Category="Subjects" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="OutputPulseEnable" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EnablePulses</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="OutputPulseEnable" />
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputPulseEnablePayload">
                <beh:OutputPulseEnable>DO1 DO2 DO3</beh:OutputPulseEnable>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PulseDO1" />
        <Property Name="PulseDO2" />
        <Property Name="PulseDO3" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PulseWidths</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PulseDO1" />
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreatePulseDO1Payload">
                <beh:PulseDO1>1</beh:PulseDO1>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PulseDO2" />
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreatePulseDO2Payload">
                <beh:PulseDO2>1</beh:PulseDO2>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PulseDO3" />
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreatePulseDO3Payload">
                <beh:PulseDO3>1</beh:PulseDO3>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>BehaviorCommands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="3" To="7" Label="Source2" />
            <Edge From="3" To="10" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="BehaviorEventsSubjectName" Description="The name of the output &quot;Events&quot; Subject" Category="Subjects" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="TriggerPulseSubjectName" Description="The name of the subject to which pulse triggers should be sent. The value of the integer sent to this trigger will trigger a pulse on th corresponding DO line" Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
        <rx:Name>TriggerPulse</rx:Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputSetPayload">
          <beh:OutputSet>DO0</beh:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggerPulse</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputSetPayload">
          <beh:OutputSet>DO1</beh:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggerPulse</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" />
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputSetPayload">
          <beh:OutputSet>DO2</beh:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="TriggerCalibratedPulseSubjectName" Description="The name of the subject to which calibrated pulse triggers should be sent. Each value is a Tuple of the DO line (1 to 3) and the pulse width in milliseconds; the width is written to the line's PulseDO register and the line is then set, in that order." Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Int32,sys:Int32)">
        <rx:Name>TriggerCalibratedPulse</rx:Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggerCalibratedPulse</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Line1?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PulseDO1" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreatePulseDO1Payload">
          <beh:PulseDO1>1</beh:PulseDO1>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputSetPayload">
          <beh:OutputSet>DO1</beh:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggerCalibratedPulse</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Line2?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PulseDO2" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreatePulseDO2Payload">
          <beh:PulseDO2>1</beh:PulseDO2>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputSetPayload">
          <beh:OutputSet>DO2</beh:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>TriggerCalibratedPulse</Name>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Line3?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="PulseDO3" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreatePulseDO3Payload">
          <beh:PulseDO3>1</beh:PulseDO3>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputSetPayload">
          <beh:OutputSet>DO3</beh:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="1" To="4" Label="Source3" />
      <Edge From="1" To="6" Label="Source3" />
      <Edge From="1" To="16" Label="Source2" />
      <Edge From="1" To="20" Label="Source2" />
      <Edge From="1" To="24" Label="Source2" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="11" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="12" To="17" Label="Source1" />
      <Edge From="12" To="21" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="1" To="32" Label="Source2" />
      <Edge From="1" To="34" Label="Source2" />
      <Edge From="1" To="40" Label="Source2" />
      <Edge From="1" To="42" Label="Source2" />
      <Edge From="1" To="48" Label="Source2" />
      <Edge From="1" To="50" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="25" To="35" Label="Source1" />
      <Edge From="25" To="43" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="29" To="31" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="37" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="37" To="39" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="45" To="47" Label="Source1" />
      <Edge From="46" To="47" Label="Source2" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>