<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p2="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p3="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="p1:CreateMessage">
        <MessageType xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">Write</MessageType>
        <Payload xsi:type="beh:CreateEnableEncodersPayload" xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">
          <p1:EnableEncoders>EncoderPort2</p1:EnableEncoders>
        </Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <MessageType xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">Write</MessageType>
        <Payload xsi:type="beh:CreateEncoderModePayload" xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">
          <p1:EncoderMode>Displacement</p1:EncoderMode>
        </Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <MessageType xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">Write</MessageType>
        <Payload xsi:type="beh:CreateEncoderResetPayload" xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp">
          <p1:EncoderReset>EncoderPort2</p1:EncoderReset>
        </Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="CommandsSubjectName" Description="The name of the Subject that carries command messages for a specific behavior device" Category="Subjects" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>BehaviorCommands</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="EventsSubjectName" Description="The name of the Subject that carries event messages from a specific behavior device" Category="Subjects" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>BehaviorEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <Register xsi:type="beh:AnalogData" xmlns="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Encoder</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p2:Difference">
          <p2:Order>1</p2:Order>
        </Combinator>
      </Expression>
      <Expression xsi:type="p3:ExpressionTransform">
        <p3:Name>ConvertSigned</p3:Name>
        <p3:Expression>it &gt; 32768.0 ? it - 65536.0 : (it &lt; -32768.0 ? it + 65536.0 : it)</p3:Expression>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="CountsPerRev" />
        <Property Name="WheelDiameterMm" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>TicksToCentimeters</Name>
        <Description>Converts steps on a quadrature encoder to a distance in cm, published to a Subject</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="CountsPerRev" Description="The number of steps recorded on the quadrature encoder in a full revolution" Category="Running Wheel" />
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
                <Value>4096</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="WheelDiameterMm" Description="The diameter of the wheel, in millimetres" Category="Running Wheel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>170</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="p3:ExpressionTransform">
              <p3:Name>CircumferenceCm</p3:Name>
              <p3:Expression>(it*Math.Pi)/10</p3:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>53.407074</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source2" />
            <Edge From="1" To="2" Label="Source3" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="WheelDistanceSubjectName" Description="The name of the Subject that carries the wheel distance in cm" Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>WheelDistanceCm</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="6" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="6" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source3" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>