<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:p1="clr-namespace:;assembly=UclOpen.Devices"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Custom serial driver controlling a LickSpoutStage controling the positon of two lick spouts actuated by 5 stepper motors</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>RigSchema</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>LickSpoutStage</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="BaudRate" Selector="BaudRate" />
          <Property Name="ReadBufferSize" Selector="ReadBufferSize" />
          <Property Name="WriteBufferSize" Selector="WriteBufferSize" />
          <Property Name="NewLine" Selector="NewLine" />
          <Property Name="PortName" Selector="PortName" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:CreateSerialPort">
          <port:Name>StepperDriver</port:Name>
          <port:BaudRate>9600</port:BaudRate>
          <port:NewLine>\r\n</port:NewLine>
          <port:Parity>None</port:Parity>
          <port:ParityReplace>63</port:ParityReplace>
          <port:DataBits>8</port:DataBits>
          <port:StopBits>One</port:StopBits>
          <port:Handshake>None</port:Handshake>
          <port:DiscardNull>false</port:DiscardNull>
          <port:DtrEnable>false</port:DtrEnable>
          <port:RtsEnable>false</port:RtsEnable>
          <port:ReadBufferSize>4096</port:ReadBufferSize>
          <port:WriteBufferSize>2048</port:WriteBufferSize>
          <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ByteSetSpeed" Selector="ByteSetSpeed" />
          <Property Name="Speed" Selector="Speed" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>SetSpeed</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Speed" Description="The speed to which the motors will be set" Category="StepperDriver" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>300</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0};</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value />
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ByteSetSpeed" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ByteProperty">
                <Value>72</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateStepperMessage" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWrite">
                <port:PortName>StepperDriver</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="7" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="AccelMajor" Selector="AccelMajor" />
          <Property Name="AccelMinor" Selector="AccelMinor" />
          <Property Name="ByteSetAcceleration" Selector="ByteSetAcceleration" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SetAcceleration</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="AccelMajor" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>20</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="AccelMinor" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0},{1};</Format>
              <Selector>Item1,Item2</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>20,2;</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>CommandByte_AdjustAcceleration</Name>
              <Text><![CDATA[CommandByte_AdjustAcceleration]]></Text>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ByteSetAcceleration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ByteProperty">
                <Value>73</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateStepperMessage" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWrite">
                <port:PortName>StepperDriver</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="11" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="ByteMove" Selector="ByteMove" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="StepperCommandsSubjectName" Description="The name of the Subject carying commands to the SerialStepperDriver Device" Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>ListenForMoveCommand</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StepperCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ByteMove" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="ByteProperty">
                <Value>71</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateStepperMessage" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWrite">
                <port:PortName>StepperDriver</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>SetPositions</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Positions</Selector>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="StringProperty">
          <Value>home</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Format">
        <Format>{0},{1},{2},{3},{4}</Format>
        <Selector>LeftElevation,RightElevation,RightRadial,LeftRadial,BaseTransverse</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>0,0,0,0,0;</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StepperCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialRead">
          <port:PortName>StepperDriver</port:PortName>
          <port:Count>1</port:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:ConvertByteArrayToString" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="StepperEventsSubjectName" Description="The name of the Subject carrying messages from the serial stepper driver" Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StepperEvents</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="3" To="8" Label="Source1" />
      <Edge From="3" To="10" Label="Source1" />
      <Edge From="3" To="13" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="12" Label="Source1" />
      <Edge From="9" To="18" Label="Source1" />
      <Edge From="10" To="12" Label="Source2" />
      <Edge From="11" To="12" Label="Source3" />
      <Edge From="11" To="19" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>