<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Harp.TimestampGeneratorGen3;assembly=Harp.TimestampGeneratorGen3"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="CommandsSubjectName" Description="The name of the input &quot;commands&quot; Subject" Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>TimestampGeneratorCommands</rx:Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
        <Property Name="DumpRegisters" />
        <Property Name="Heartbeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMx</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="EventsSubjectName" Description="The name of the output &quot;Events&quot; Subject" Category="Subjects" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>ClockSynchronizerEvents</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="GroupWorkflow">
        <Name>Timestamps</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Name" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ClockSynchronizerEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessageType">
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:FilterRegister">
              <harp:FilterType>Include</harp:FilterType>
              <harp:Register xsi:type="harp:TimestampSeconds" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Heartbeats</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ClockSynchronizerEvents</Name>
            </Expression>
            <Expression xsi:type="p1:Parse">
              <harp:Register xsi:type="p1:TimestampedTimer" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Seconds</Selector>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Timestamp</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Timebase</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:SynchronizeTimestamp" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TimerFrequency" Description="The frequency at which to send timestamp events to Bonsai" />
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateTimerFrequencyPayload">
          <p1:TimerFrequency>Timer1000Hz</p1:TimerFrequency>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>TimestampGeneratorCommands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="14" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>