<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Interval" DisplayName="SampleInterval" Description="How often to take a frame. Decimation in time, applied before any other work." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SampleInterval">
          <rx:Interval>PT0.2S</rx:Interval>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Size" DisplayName="FrameSize" Description="Size of the streamed frames. Decimation in space." />
        <Property Name="Interpolation" DisplayName="Interpolation" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>320</cv:Width>
            <cv:Height>240</cv:Height>
          </cv:Size>
          <cv:Interpolation>Linear</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:EncodeImage">
          <cv:Extension>.jpg</cv:Extension>
          <cv:CompressionParameters />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertToArray">
          <dsp:Depth xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StreamName" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Streaming:BuildMessage.bonsai">
        <StreamName>video</StreamName>
        <Encoding>jpeg</Encoding>
        <PayloadType>Image</PayloadType>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>OutgoingMessage</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>