<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scg="clr-namespace:System.Collections.Generic;assembly=mscorlib"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="DisplayDevice" />
        <Property Name="Width" />
        <Property Name="Height" />
        <Property Name="TargetRenderFrequency" />
        <Property Name="TargetUpdateFrequency" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>1000</gl:Width>
          <gl:Height>1000</gl:Height>
          <gl:Title>VrForaging</gl:Title>
          <gl:VSync>Off</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>false</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Fullscreen</gl:WindowState>
          <gl:DisplayDevice>Second</gl:DisplayDevice>
          <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency>120</gl:TargetUpdateFrequency>
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="SetDisplayCalibrationSubject" />
      </Expression>
      <Expression xsi:type="rx:AsyncSubject" TypeArguments="scg:IDictionary(sys:String,sys:Tuple(p1:Point3d,p1:Point3d,sys:Double,sys:Double,p1:Point2d,p1:Point2d))">
        <rx:Name>SetDisplayCalibration</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Key</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as Rotation,
Item2 as Translation,
Item3 as DisplayWidth,
Item4 as DisplayHeight,
Item5 as ViewportSize,
Item6 as ViewportPosition)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:ToDictionary">
        <rx:KeySelector>Item1</rx:KeySelector>
        <rx:ElementSelector>Item2</rx:ElementSelector>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>DisplayCalibration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="RenderFrameSubject" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>RenderFrame</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Eye" />
        <Property Name="NearClip" />
        <Property Name="FarClip" />
        <Property Name="Light" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
        <Eye>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Eye>
        <NearClip>1E-05</NearClip>
        <FarClip>1000</FarClip>
        <Light>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Light>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>ViewMatrix</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RotateY">
          <gl:Order>Append</gl:Order>
          <gl:Angle>-3.14159274</gl:Angle>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
Item1 as ViewMatrix,
Item2.ProjectionMatrix as ProjectionMatrix,
Item2.Light as Light)</scr:Expression>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="Draw3DStimSubject" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw3DStim</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderCubemap">
          <gl:RenderState />
          <gl:ClearColor>Gray</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:FaceSize xsi:nil="true" />
          <gl:InternalFormat>Rgb</gl:InternalFormat>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>RenderCubemap</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DisplayCalibration</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Window</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Calibration</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RenderCubemap</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Calibration</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="Item2.Value.DisplayWidth" />
                <Property Name="Height" Selector="Item2.Value.DisplayHeight" />
                <Property Name="Rotation" Selector="Item2.Value.Rotation" />
                <Property Name="Translation" Selector="Item2.Value.Translation" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>15</Width>
              <Height>20</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>-2</X>
                <Y>0</Y>
                <Z>-1</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateViewportState">
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Width>1</gl:Width>
                <gl:Height>1</gl:Height>
              </Combinator>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2.Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="Width" Selector="Item2.ViewportSize.X" />
                <Property Name="Height" Selector="Item2.ViewportSize.Y" />
                <Property Name="X" Selector="Item2.ViewportPosition.X" />
                <Property Name="Y" Selector="Item2.ViewportPosition.Y" />
              </PropertyMappings>
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0.5</X>
              <Y>0</Y>
              <Width>0.5</Width>
              <Height>1</Height>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PostDrawingSubject" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>PostDrawing</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="17" To="20" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="23" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>