<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Lower" DisplayName="Minimum" Category="TogglePeriod" />
        <Property Name="Upper" DisplayName="Maximum" Category="TogglePeriod" />
      </Expression>
      <Expression xsi:type="rx:Defer">
        <Name>RandomInterval</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>RngSeed</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" />
              <Property Name="Upper" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>2</p1:Lower>
                <p1:Upper>6</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT5.155S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Index</Selector>
      </Expression>
      <Expression xsi:type="Mod">
        <Operand xsi:type="IntProperty">
          <Value>2</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Equal">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>SyncQuadColor</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Name" DisplayName="PostDrawingSubject" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PostDrawing</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>0</Left>
        <Right>1</Right>
        <Bottom>0</Bottom>
        <Top>1</Top>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:UpdateViewportState">
          <gl:X>0</gl:X>
          <gl:Y>0</gl:Y>
          <gl:Width>1</gl:Width>
          <gl:Height>1</gl:Height>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>TimeStep.ElapsedRealTime</Selector>
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ElementIndex" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
  it.Index as Index,
  it.Value as ElapsedRealTime
)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>SyncQuadColor</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToInt32(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="ColorR" Selector="Item2" />
        </PropertyMappings>
        <Selector>Item1.Item1</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ExtentX" DisplayName="SyncQuadExtentX" />
        <Property Name="ExtentY" DisplayName="SyncQuadExtentY" />
        <Property Name="LocationX" DisplayName="SyncQuadLocationX" />
        <Property Name="LocationY" DisplayName="SyncQuadLocationY" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>0.5</ExtentX>
        <ExtentY>0.5</ExtentY>
        <LocationX>1</LocationX>
        <LocationY>0</LocationY>
        <Layer>1</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>0</ColorG>
        <ColorB>0</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item2.Index</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Name>Mod2</scr:Name>
        <scr:Expression>(it % 2)</scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item1</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="ColorR" Selector="Item1" />
        </PropertyMappings>
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ExtentX" DisplayName="FrameQuadExtentX" />
        <Property Name="ExtentY" DisplayName="FrameQuadExtentY" />
        <Property Name="LocationX" DisplayName="FrameQuadLocationX" />
        <Property Name="LocationY" DisplayName="FrameQuadLocationY" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
        <ExtentX>0.5</ExtentX>
        <ExtentY>0.5</ExtentY>
        <LocationX>1</LocationX>
        <LocationY>0.51111114</LocationY>
        <Layer>1</Layer>
        <Angle>0</Angle>
        <ColorR>1</ColorR>
        <ColorG>0</ColorG>
        <ColorB>0</ColorB>
        <ColorA>1</ColorA>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item1.Item2</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(
it.Item1.Index as FrameIndex,
it.Item1.ElapsedRealTime as ElapsedRealTime,
it.Item2 as SyncState
)</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="9" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="20" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="23" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="27" Label="Source1" />
      <Edge From="23" To="29" Label="Source1" />
      <Edge From="23" To="35" Label="Source1" />
      <Edge From="23" To="36" Label="Source1" />
      <Edge From="24" To="26" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="34" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="30" To="31" Label="Source1" />
      <Edge From="31" To="33" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="33" To="34" Label="Source2" />
      <Edge From="34" To="39" Label="Source1" />
      <Edge From="35" To="37" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source2" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>